PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Experiment_DMTS
  logging level = debug
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Routines
  Routine trial
    ImageComponent sample
      image [set every repeat] = $_sample
      pos = (0, 0.35)
      size = (0.35, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      units = norm
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    ImageComponent cmp1
      image [set every repeat] = $_cmp1
      pos = (-0.5, -0.4)
      size = (0.35, 0.4)
      startVal [time (s)] = 3.5
      units = norm
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    ImageComponent cmp2
      image [set every repeat] = $_cmp2
      pos = (0, -0.4)
      size = (0.35, 0.4)
      startVal [time (s)] = 3.5
      units = norm
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    ImageComponent cmp3
      image [set every repeat] = $_cmp3
      pos = (0.5, -0.4)
      size = (0.35, 0.4)
      startVal [time (s)] = 3.5
      units = norm
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    KeyboardComponent resp
      allowedKeys = 'up','left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      storeCorrect = True
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  Routine feedback
    CodeComponent setMsg
      Code Type = Py
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      Begin Experiment:
        msg = ' '
        correct_incorrect = []
      Begin Routine:
        if resp.corr:
                msg = "Yas! "
                msgColor = "green"
                correct_incorrect.append(1)
        else:
                msg = "Nope "
                msgColor = "red"
                correct_incorrect.append(0)
        #end trial block after scoring 100% correct on 6 consecutive trials
        nCorr = sum(correct_incorrect[-6:])
        nResps = len(correct_incorrect[-6:])

        print(str(nCorr)+"this is number correct")
        print(str(nResps)+"this is number of responses")
        print("*"*50)
      End Routine:
        if nCorr >= 6:
            print("you got one right")
            training.finished = True
    TextComponent feedbackText
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $msg
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  Routine instructions1
    KeyboardComponent readyResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Greetings!

        In this experiment you will learn to match black and white images. First an image will briefly appear in the upper half of the screen. Next there will be three images below.

        Use the left, up, and right arrows to select which image you think matches.

        Pay attention to the feedback to learn which images go together.

        Press any key to begin.
  Routine instructions2
    KeyboardComponent readyResp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Nice work, you have successfully learned which images go together! Now you will complete the same task except feedback will not be provided.

        Press any key to begin. Good luck!
  Routine thankyou
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for your participation!
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Flow
  Routine instructions1
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = exp3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B2.png', '_cmp2': 'experiment/B1.png', '_cmp3': 'experiment/B3.png', 'corrAns': 'up', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B1.png', '_cmp2': 'experiment/B3.png', '_cmp3': 'experiment/B2.png', 'corrAns': 'left', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B3.png', '_cmp2': 'experiment/B2.png', '_cmp3': 'experiment/B1.png', 'corrAns': 'right', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B3.png', '_cmp2': 'experiment/B2.png', '_cmp3': 'experiment/B1.png', 'corrAns': 'right', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B1.png', '_cmp2': 'experiment/B3.png', '_cmp3': 'experiment/B2.png', 'corrAns': 'left', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B2.png', '_cmp2': 'experiment/B1.png', '_cmp3': 'experiment/B3.png', 'corrAns': 'up', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A2.png', '_cmp1': 'experiment/B2.png', '_cmp2': 'experiment/B1.png', '_cmp3': 'experiment/B3.png', 'corrAns': 'left', 'correct': 'experiment/B2.png'},
      {'_sample': 'experiment/A2.png', '_cmp1': 'experiment/B1.png', '_cmp2': 'experiment/B3.png', '_cmp3': 'experiment/B2.png', 'corrAns': 'right', 'correct': 'experiment/B2.png'}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
    Routine trial
    Routine feedback
  LoopTerminator training
  Routine instructions2
  LoopInitiator test loopType="TrialHandler"
    conditionsFile = exp3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B2.png', '_cmp2': 'experiment/B1.png', '_cmp3': 'experiment/B3.png', 'corrAns': 'up', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B1.png', '_cmp2': 'experiment/B3.png', '_cmp3': 'experiment/B2.png', 'corrAns': 'left', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B3.png', '_cmp2': 'experiment/B2.png', '_cmp3': 'experiment/B1.png', 'corrAns': 'right', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B3.png', '_cmp2': 'experiment/B2.png', '_cmp3': 'experiment/B1.png', 'corrAns': 'right', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B1.png', '_cmp2': 'experiment/B3.png', '_cmp3': 'experiment/B2.png', 'corrAns': 'left', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A1.png', '_cmp1': 'experiment/B2.png', '_cmp2': 'experiment/B1.png', '_cmp3': 'experiment/B3.png', 'corrAns': 'up', 'correct': 'experiment/B1.png'},
      {'_sample': 'experiment/A2.png', '_cmp1': 'experiment/B2.png', '_cmp2': 'experiment/B1.png', '_cmp3': 'experiment/B3.png', 'corrAns': 'left', 'correct': 'experiment/B2.png'},
      {'_sample': 'experiment/A2.png', '_cmp1': 'experiment/B1.png', '_cmp2': 'experiment/B3.png', '_cmp3': 'experiment/B2.png', 'corrAns': 'right', 'correct': 'experiment/B2.png'}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
    Routine trial
  LoopTerminator test
  Routine thankyou
